PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['s2.png', 's1.png']
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = deg
  Use version = 2022.1.4
  Window size (pixels) = [1920, 1200]
  expName = orientation_discrimination
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        condition = list(range(0, 60))
        shuffle(condition)
      Begin Routine:
        if condition[trials.thisN - 1] % 2 == 0:
            stim = "s1.png"
            correctAns = 'up'
        else:
            stim = "s2.png"
            correctAns = 'down'
      End Routine:
        trials.addData('correctAns', correctAns)
        trials.addData('stim', stim)
    ImageComponent image
      image [set every repeat] = $stim
      size = (2, 2)
      startVal [frame N] = 20
      stopVal [frame N] = 25
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'up','down'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [frame N] = 0.0
      storeCorrect = True
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  Routine instruction
    TextComponent text
      letterHeight = 0.05
      startVal [frame N] = 0.0
      units = height
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      text:
        Indicate if grating orientation is upward or downward relative to the horizon.
        Keep looking at the fixation cross during the experiment.
        Press SPACE to start.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 60
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    Routine trial
  LoopTerminator trials
