PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = deg
  Use version = 2022.1.4
  Window size (pixels) = [1920, 1200]
  expName = orientation_discrimination
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy as np
        import random as rand

        nTrials = 60
        tCounter = 0

        condition = np.zeros(nTrials)
        condition[0:30]  = 0
        condition[30:60] = 1
        np.random.shuffle(condition)
      Begin Routine:
        i = condition[tCounter]

        if i == 0:
            ori = 280
            correctAns = 'up'
        elif i == 1:
            ori = 260
            correctAns = 'down'

        trials.addOtherData('correctAns', correctAns) # required for tracking correctness in staircasing
        trials.addOtherData('ori', ori)
      End Routine:
        tCounter = tCounter + 1
    PolygonComponent polygon
      fillColor = white
      pos = (-4, 0)
      shape = rectangle
      size = (0.15, 0.5)
      startVal [frame N] = 20
      units = deg
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    PolygonComponent polygon_2
      fillColor = white
      pos = (-4, 0)
      shape = rectangle
      size = (0.5, 0.15)
      startVal [frame N] = 20
      units = deg
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    GratingComponent grating
      contrast [set every repeat] = level
      mask = circle
      ori [set every repeat] = ori
      pos = (4, 0)
      sf = 5
      size = (3, 3)
      startVal [frame N] = 20
      stopVal [frame N] = 25
      tex = sin
      texture resolution = 256
      units = deg
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    KeyboardComponent key_resp
      allowedKeys = 'up','down'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [frame N] = 0.0
      storeCorrect = True
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  Routine instruction
    TextComponent text
      letterHeight = 1
      startVal [frame N] = 0.0
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      text:
        Indicate if grating orientation is upward or downward relative to the horizon.
        Keep looking at the fixation cross during the experiment.
        Press SPACE to start.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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Flow
  Routine instruction
  LoopInitiator trials loopType="StairHandler"
    N down = 2
    N reversals = 8
    N up = 1
    loopType = staircase
    max value = 0.5
    min value = 0.01
    nReps = 60
    start value = 0.3
    step sizes = [0.4,0.4,0.2,0.2,0.1]
    step type = log
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    Routine trial
  LoopTerminator trials
