PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = deg
  Use version = 2022.1.4
  Window size (pixels) = [1920, 1200]
  expName = orientation_discrimination
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
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      Begin Routine:
        if random() > 0.5:
            ori = 280
            correctAns = 'up'
        elif random() < 0.5:
            ori = 260
            correctAns = 'down'
      End Routine:
        subject = expInfo["participant"]
        trial_num = trials.thisN
        image_file = "subject_{}_trial_{}.png".format(subject, trial_num)
        win.getMovieFrame("front")
        win.saveMovieFrames("stimuli" + image_file, codec = "png")
        thisExp.addData("image_file", image_file)
    PolygonComponent polygon
      fillColor = white
      pos = (-4, 0)
      shape = rectangle
      size = (0.15, 0.7)
      startVal [frame N] = 20
      units = deg
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    PolygonComponent polygon_2
      fillColor = white
      pos = (-4, 0)
      shape = rectangle
      size = (0.7, 0.15)
      startVal [frame N] = 20
      units = deg
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    GratingComponent grating
      contrast = 0.01419601
      mask = circle
      opacity [set every repeat] = 1
      ori [set every repeat] = ori
      pos = (4, 0)
      sf = 5
      size = (3, 3)
      startVal [frame N] = 20
      tex = sin
      texture resolution = 256
      units = deg
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    KeyboardComponent key_resp
      allowedKeys = 'up','down'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [frame N] = 0.0
      storeCorrect = True
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  Routine instruction
    TextComponent text
      letterHeight = 1
      startVal [frame N] = 0.0
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      text:
        This experiment saves an image in each trial as a png file.
        You can create various images by changing stimulus parameters.
        Press SPACE to start.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 60
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    Routine trial
  LoopTerminator trials
